OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.6.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> LSL Communication
  Input 1 Stream Name = obci_eeg1
LSL Communication => #2
  Output 1 Stream Name = Outlet_Info
Data=#0.Signal stream, Stimulations=#2 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input stream=#0.Signal stream, Stimulations stream=#2 -> CSV File Writer
  Filename = ${Player_ScenarioDirectory}/EEG_data/T-001/Session 1/data_1.csv
  Precision = 10
  Append data = false
  Only last matrix = false
